<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:onix1="clr-namespace:OpenEphys.Onix1;assembly=OpenEphys.Onix1"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>Initialized</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>Folder</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Gate" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Take">
            <rx:Count>1</rx:Count>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:SelectMany">
          <Name>HEADSTAGE RHS2116 DATA</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="onix1:PortStatus">
                  <onix1:DeviceName>HeadstageRhs2116/LinkController</onix1:DeviceName>
                </Combinator>
              </Expression>
              <Expression xsi:type="SubscribeSubject">
                <Name>Start</Name>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:SubscribeWhen" />
              </Expression>
              <Expression xsi:type="SubscribeSubject">
                <Name>Abort</Name>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:TakeUntil" />
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Timestamp" />
              </Expression>
              <Expression xsi:type="SubscribeSubject">
                <Name>Folder</Name>
              </Expression>
              <Expression xsi:type="Format">
                <Format>{0}\Ephys\port-status.csv</Format>
              </Expression>
              <Expression xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="FileName" />
                </PropertyMappings>
              </Expression>
              <Expression xsi:type="io:CsvWriter">
                <io:FileName>port-status_.csv</io:FileName>
                <io:Append>false</io:Append>
                <io:Overwrite>false</io:Overwrite>
                <io:Suffix>None</io:Suffix>
                <io:IncludeHeader>false</io:IncludeHeader>
                <io:Selector>Timestamp,Value.Clock,Value.StatusCode</io:Selector>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="onix1:DigitalInput">
                  <onix1:DeviceName>BreakoutBoard/DigitalIO</onix1:DeviceName>
                </Combinator>
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Buttons</Selector>
              </Expression>
              <Expression xsi:type="rx:Condition">
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="HasFlag">
                      <Operand xsi:type="WorkflowProperty" TypeArguments="onix1:BreakoutButtonState">
                        <Value>Square</Value>
                      </Operand>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:DistinctUntilChanged" />
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="2" Label="Source1" />
                    <Edge From="2" To="3" Label="Source1" />
                  </Edges>
                </Workflow>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="DoubleProperty">
                  <Value>0</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="onix1:Rhs2116StimulusTrigger">
                  <onix1:DeviceName>HeadstageRhs2116/StimulusTrigger</onix1:DeviceName>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="onix1:Rhs2116PairData">
                  <onix1:DeviceName>HeadstageRhs2116/Rhs2116Pair</onix1:DeviceName>
                  <onix1:BufferSize>30</onix1:BufferSize>
                </Combinator>
              </Expression>
              <Expression xsi:type="SubscribeSubject">
                <Name>Start</Name>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:SubscribeWhen" />
              </Expression>
              <Expression xsi:type="SubscribeSubject">
                <Name>Abort</Name>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:TakeUntil" />
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Clock</Selector>
              </Expression>
              <Expression xsi:type="SubscribeSubject">
                <Name>Folder</Name>
              </Expression>
              <Expression xsi:type="Format">
                <Format>{0}\Ephys\rhs2116pair-clock.raw</Format>
              </Expression>
              <Expression xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="Path" />
                </PropertyMappings>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="dsp:MatrixWriter">
                  <dsp:Path>rhs2116pair-clock_.raw</dsp:Path>
                  <dsp:Suffix>None</dsp:Suffix>
                  <dsp:Overwrite>false</dsp:Overwrite>
                  <dsp:Layout>ColumnMajor</dsp:Layout>
                </Combinator>
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>DCData</Selector>
              </Expression>
              <Expression xsi:type="SubscribeSubject">
                <Name>Folder</Name>
              </Expression>
              <Expression xsi:type="Format">
                <Format>{0}\Ephys\rhs2116pair-dc.raw</Format>
              </Expression>
              <Expression xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="Path" />
                </PropertyMappings>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="dsp:MatrixWriter">
                  <dsp:Path>rhs2116pair-dc_.raw</dsp:Path>
                  <dsp:Suffix>None</dsp:Suffix>
                  <dsp:Overwrite>false</dsp:Overwrite>
                  <dsp:Layout>ColumnMajor</dsp:Layout>
                </Combinator>
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>AmplifierData</Selector>
              </Expression>
              <Expression xsi:type="SubscribeSubject">
                <Name>Folder</Name>
              </Expression>
              <Expression xsi:type="Format">
                <Format>{0}\Ephys\rhs2116pair-ac.raw</Format>
                <Selector />
              </Expression>
              <Expression xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="Path" />
                </PropertyMappings>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="dsp:MatrixWriter">
                  <dsp:Path>rhs2116pair-ac_.raw</dsp:Path>
                  <dsp:Suffix>None</dsp:Suffix>
                  <dsp:Overwrite>false</dsp:Overwrite>
                  <dsp:Layout>ColumnMajor</dsp:Layout>
                </Combinator>
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>RecoveryMask</Selector>
              </Expression>
              <Expression xsi:type="SubscribeSubject">
                <Name>Folder</Name>
              </Expression>
              <Expression xsi:type="Format">
                <Format>{0}\Ephys\rhs2116pair-recovery.raw</Format>
              </Expression>
              <Expression xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="Path" />
                </PropertyMappings>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="dsp:MatrixWriter">
                  <dsp:Path>rhs2116pair-recovery_.raw</dsp:Path>
                  <dsp:Suffix>None</dsp:Suffix>
                  <dsp:Overwrite>false</dsp:Overwrite>
                  <dsp:Layout>ColumnMajor</dsp:Layout>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="onix1:Rhs2116TriggerData">
                  <onix1:DeviceName>HeadstageRhs2116/StimulusTrigger</onix1:DeviceName>
                </Combinator>
              </Expression>
              <Expression xsi:type="SubscribeSubject">
                <Name>Start</Name>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:SubscribeWhen" />
              </Expression>
              <Expression xsi:type="SubscribeSubject">
                <Name>Abort</Name>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:TakeUntil" />
              </Expression>
              <Expression xsi:type="SubscribeSubject">
                <Name>Folder</Name>
              </Expression>
              <Expression xsi:type="Format">
                <Format>{0}\Ephys\rhs2116trigger.csv</Format>
              </Expression>
              <Expression xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="FileName" />
                </PropertyMappings>
              </Expression>
              <Expression xsi:type="io:CsvWriter">
                <io:FileName>rhs2116trigger_.csv</io:FileName>
                <io:Append>false</io:Append>
                <io:Overwrite>false</io:Overwrite>
                <io:Suffix>None</io:Suffix>
                <io:IncludeHeader>false</io:IncludeHeader>
                <io:Selector>Clock,Delay,Status,Origin</io:Selector>
              </Expression>
            </Nodes>
            <Edges>
              <Edge From="0" To="2" Label="Source1" />
              <Edge From="1" To="2" Label="Source2" />
              <Edge From="2" To="4" Label="Source1" />
              <Edge From="3" To="4" Label="Source2" />
              <Edge From="4" To="5" Label="Source1" />
              <Edge From="5" To="9" Label="Source1" />
              <Edge From="6" To="7" Label="Source1" />
              <Edge From="7" To="8" Label="Source1" />
              <Edge From="8" To="9" Label="Source2" />
              <Edge From="10" To="11" Label="Source1" />
              <Edge From="11" To="12" Label="Source1" />
              <Edge From="12" To="13" Label="Source1" />
              <Edge From="13" To="14" Label="Source1" />
              <Edge From="15" To="17" Label="Source1" />
              <Edge From="16" To="17" Label="Source2" />
              <Edge From="17" To="19" Label="Source1" />
              <Edge From="18" To="19" Label="Source2" />
              <Edge From="19" To="20" Label="Source1" />
              <Edge From="19" To="25" Label="Source1" />
              <Edge From="19" To="30" Label="Source1" />
              <Edge From="19" To="35" Label="Source1" />
              <Edge From="20" To="24" Label="Source1" />
              <Edge From="21" To="22" Label="Source1" />
              <Edge From="22" To="23" Label="Source1" />
              <Edge From="23" To="24" Label="Source2" />
              <Edge From="25" To="29" Label="Source1" />
              <Edge From="26" To="27" Label="Source1" />
              <Edge From="27" To="28" Label="Source1" />
              <Edge From="28" To="29" Label="Source2" />
              <Edge From="30" To="34" Label="Source1" />
              <Edge From="31" To="32" Label="Source1" />
              <Edge From="32" To="33" Label="Source1" />
              <Edge From="33" To="34" Label="Source2" />
              <Edge From="35" To="39" Label="Source1" />
              <Edge From="36" To="37" Label="Source1" />
              <Edge From="37" To="38" Label="Source1" />
              <Edge From="38" To="39" Label="Source2" />
              <Edge From="40" To="42" Label="Source1" />
              <Edge From="41" To="42" Label="Source2" />
              <Edge From="42" To="44" Label="Source1" />
              <Edge From="43" To="44" Label="Source2" />
              <Edge From="44" To="48" Label="Source1" />
              <Edge From="45" To="46" Label="Source1" />
              <Edge From="46" To="47" Label="Source1" />
              <Edge From="47" To="48" Label="Source2" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="2" Label="Source1" />
      <Edge From="1" To="2" Label="Source2" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>