<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:onix1="clr-namespace:OpenEphys.Onix1;assembly=OpenEphys.Onix1"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="SubscribeSubject">
        <Name>Initialized</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Folder</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Gate" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="PortName" Category="Commutator" />
        <Property Name="Enable" Description="Enable/disable the auto commutator" Category="Commutator" />
        <Property Name="EnableLed" Category="Commutator" />
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>MINISCOPE DATA</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="onix1:PortStatus">
                <onix1:DeviceName>UclaMiniscopeV4/PortController</onix1:DeviceName>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Start</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Abort</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Folder</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}\Miniscope\port_status.csv</Format>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>..\data\experiment_results\test\2026-4-14\17-46-46\Miniscope\port_status.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
              <io:Selector>Timestamp,Value.Clock,Value.StatusCode</io:Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="onix1:PolledBno055Data">
                <onix1:DeviceName>UclaMiniscopeV4/PolledBno055</onix1:DeviceName>
                <onix1:PolledRegisters>All</onix1:PolledRegisters>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Quaternion</Selector>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PortName" />
              <Property Name="Enable" />
              <Property Name="EnableLed" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="OpenEphys.Commutator:AutoCommutator.bonsai">
              <PortName>COM3</PortName>
              <Enable>true</Enable>
              <EnableLed>true</EnableLed>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Start</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Abort</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Folder</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}\Miniscope\bno055.csv</Format>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>..\data\experiment_results\test\2026-4-14\17-46-46\Miniscope\bno055.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
              <io:Selector>Clock,EulerAngle,Quaternion,Acceleration,Gravity,Temperature</io:Selector>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="10" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="11" To="16" Label="Source1" />
            <Edge From="12" To="14" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="15" To="16" Label="Source2" />
            <Edge From="16" To="18" Label="Source1" />
            <Edge From="17" To="18" Label="Source2" />
            <Edge From="18" To="22" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="2" Label="Source1" />
      <Edge From="1" To="2" Label="Source2" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="5" Label="Source1" />
      <Edge From="4" To="5" Label="Source2" />
      <Edge From="5" To="6" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>